PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine FC
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    PolygonComponent Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent Fixation_Cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine PracticeTrial
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    PolygonComponent intervals_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num1
      image [set every repeat] = $cue1
      pos = (0.1, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num2
      image [set every repeat] = $cue2
      pos = (-0.25, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num3
      image [set every repeat] = $cue3
      pos = (-0.6, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num4
      image [set every repeat] = $cue4
      pos = (0.1, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num5
      image [set every repeat] = $cue5
      pos = (-0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num6
      image [set every repeat] = $cue6
      pos = (-0.6, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num7
      image [set every repeat] = $cue7
      pos = (0.1, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num8
      image [set every repeat] = $cue8
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num9
      image [set every repeat] = $cue9
      pos = (-0.6, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent Target
      image [set every repeat] = $cue10
      pos = (0.6, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_resp
      clickable = num1, num2, num3, num4, num5, num6, num7, num8, num9
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      saveParamsClickable = image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
      syncScreenRefresh = True
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    CodeComponent code_mouse_Visible
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
    CodeComponent Fb_Code
      Code Type = Py
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      Begin Routine:
        # Initialize feedback text
        feedback_text = ""
      Each Frame:
        # Initialize clicked_image
        clicked_image = None

        # Check for mouse clicks
        if mouse_resp.getPressed()[0]:  # Check if the left mouse button is pressed
            # Check each image component for clicks
            if mouse_resp.isPressedIn(num1):
                clicked_image = cue1  # Get the path of the clicked image
            elif mouse_resp.isPressedIn(num2):
                clicked_image = cue2
            elif mouse_resp.isPressedIn(num3):
                clicked_image = cue3
            elif mouse_resp.isPressedIn(num4):
                clicked_image = cue4
            elif mouse_resp.isPressedIn(num5):
                clicked_image = cue5
            elif mouse_resp.isPressedIn(num6):
                clicked_image = cue6
            elif mouse_resp.isPressedIn(num7):
                clicked_image = cue7
            elif mouse_resp.isPressedIn(num8):
                clicked_image = cue8
            elif mouse_resp.isPressedIn(num9):
                clicked_image = cue9

            # Provide feedback based on the clicked image
            if clicked_image is not None:
                # Get the correct response from the Practice file
                correct_response = str(cor_resp)  # This should be the full path to the correct image
                if clicked_image == correct_response:
                    feedback_text = "Correct!"
                else:
                    feedback_text = "Incorrect!"

                continueRoutine = False  # End the routine after a response
  Routine Feedback
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    PolygonComponent Feedack_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent feedback_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedback_text
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        correct_answer = Practice.thisTrial['correct_answer']
        response = None
        feedback_message = ""
      Each Frame:
        if mouse_resp.isPressedIn(num1):
            response = "num1"
        elif mouse_resp.isPressedIn(num2):
            response = "num2"
        elif mouse_resp.isPressedIn(num3):
            response = "num3"
        elif mouse_resp.isPressedIn(num4):
            response = "num4"
        elif mouse_resp.isPressedIn(num5):
            response = "num5"
        elif mouse_resp.isPressedIn(num6):
            response = "num6"
        elif mouse_resp.isPressedIn(num7):
            response = "num7"
        elif mouse_resp.isPressedIn(num8):
            response = "num8"
        elif mouse_resp.isPressedIn(num9):
            response = "num9"

        if response == correct_answer:
            feedback_message = "Correct!"
        else:
            feedback_message = "Incorrect!"

        if response:
            continueRoutine = False
      End Routine:
        feedback_text.setText(feedback_message)
  Routine end
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    PolygonComponent End_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent Thank_You
      color = Black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thanks for your Participation in this study
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  Routine FixCross
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    PolygonComponent Fix_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent Fix_Cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Routine_1
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    PolygonComponent Routine_1_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num_1
      image [set every repeat] = $cue1
      pos = (0.1, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num_2
      image [set every repeat] = $cue2
      pos = (-0.25, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num_3
      image [set every repeat] = $cue3
      pos = (-0.6, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num_4
      image [set every repeat] = $cue4
      pos = (0.1, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num_5
      image [set every repeat] = $cue5
      pos = (-0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num_6
      image [set every repeat] = $cue6
      pos = (-0.6, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num_7
      image [set every repeat] = $cue7
      pos = (0.1, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num_8
      image [set every repeat] = $cue8
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent num_9
      image [set every repeat] = $cue9
      pos = (-0.6, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent Target_1
      image [set every repeat] = $cue10
      pos = (0.6, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_resp_2
      clickable = num_1, num_2, num_3, num_4, num_5, num_6, num_7, num_8, num_9
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      saveParamsClickable = image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = True
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    CodeComponent code_mouse_Visible_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
  Routine Routine_2
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    PolygonComponent Routine_2_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent numb1
      image [set every repeat] = $cue1
      pos = (0.1, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent numb2
      image [set every repeat] = $cue2
      pos = (-0.25, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent numb3
      image [set every repeat] = $cue3
      pos = (-0.6, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent numb4
      image [set every repeat] = $cue4
      pos = (0.1, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent numb5
      image [set every repeat] = $cue5
      pos = (-0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent numb6
      image [set every repeat] = $cue6
      pos = (-0.6, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent numb7
      image [set every repeat] = $cue7
      pos = (0.1, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent numb8
      image [set every repeat] = $cue8
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent numb9
      image [set every repeat] = $cue9
      pos = (-0.6, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent Target_2
      image [set every repeat] = $cue10
      pos = (0.6, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_resp_3
      clickable = numb1, numb2, numb3, numb4, numb5, numb6, numb7, numb8, numb9
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      saveParamsClickable = image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = True
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    CodeComponent code_mouse_Visible_3
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
  Routine Routine_3
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    PolygonComponent Routine_3_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu1
      image [set every repeat] = $cue1
      pos = (0.1, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu2
      image [set every repeat] = $cue2
      pos = (-0.25, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu3
      image [set every repeat] = $cue3
      pos = (-0.6, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu4
      image [set every repeat] = $cue4
      pos = (0.1, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu5
      image [set every repeat] = $cue5
      pos = (-0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu6
      image [set every repeat] = $cue6
      pos = (-0.6, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu7
      image [set every repeat] = $cue7
      pos = (0.1, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu8
      image [set every repeat] = $cue8
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu9
      image [set every repeat] = $cue9
      pos = (-0.6, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent Target_3
      image [set every repeat] = $cue10
      pos = (0.6, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_resp_4
      clickable = nu1, nu2, nu3, nu4, nu5, nu6, nu7, nu8, nu9
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      saveParamsClickable = image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = True
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    CodeComponent code_mouse_Visible_4
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
  Routine Routine_4
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    PolygonComponent Routine_4_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu_1
      image [set every repeat] = $cue1
      pos = (0.1, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu_2
      image [set every repeat] = $cue2
      pos = (-0.25, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu_3
      image [set every repeat] = $cue3
      pos = (-0.6, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu_4
      image [set every repeat] = $cue4
      pos = (0.1, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu_5
      image [set every repeat] = $cue5
      pos = (-0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu_6
      image [set every repeat] = $cue6
      pos = (-0.6, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu_7
      image [set every repeat] = $cue7
      pos = (0.1, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu_8
      image [set every repeat] = $cue8
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent nu_9
      image [set every repeat] = $cue9
      pos = (-0.6, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent Target_4
      image [set every repeat] = $cue10
      pos = (0.6, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_resp_5
      clickable = nu_1, nu_2, nu_3, nu_4, nu_5, nu_6, nu_7, nu_8, nu_9
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      saveParamsClickable = image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = True
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    CodeComponent code_mouse_Visible_5
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
  Routine Space
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    PolygonComponent instruct_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent Press_Space
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Click on "Space" to continue if you are ready... 
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    KeyboardComponent Space_Key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
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    PolygonComponent Fb_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    TextComponent feedback_Text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $feedback_text
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Flow
  Routine Space
  Routine FC
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Practice.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'cue1': 'img1', 'cue2': 'img2', 'cue3': 'img3', 'cue4': 'img4', 'cue5': 'img5', 'cue6': 'img6', 'cue7': 'img7', 'cue8': 'img8', 'cue9': 'img9', 'cue10': 'img1', 'cor_resp': 'img1'},
      {'cue1': 'img2', 'cue2': 'img3', 'cue3': 'img4', 'cue4': 'img6', 'cue5': 'img8', 'cue6': 'img7', 'cue7': 'img5', 'cue8': 'img9', 'cue9': 'img1', 'cue10': 'img2', 'cor_resp': 'img2'},
      {'cue1': 'img3', 'cue2': 'img4', 'cue3': 'img5', 'cue4': 'img7', 'cue5': 'img9', 'cue6': 'img1', 'cue7': 'img2', 'cue8': 'img6', 'cue9': 'img8', 'cue10': 'img3', 'cor_resp': 'img3'}]
    Routine PracticeTrial
    Routine FixCross
    Routine feedback
  LoopTerminator trials
  Routine Space
  Routine FC
  LoopInitiator Loop1 loopType="TrialHandler"
    conditionsFile = Loop1.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'cue1': 'img1', 'cue2': 'img2', 'cue3': 'img3', 'cue4': 'img4', 'cue5': 'img5', 'cue6': 'img6', 'cue7': 'img7', 'cue8': 'img8', 'cue9': 'img9', 'cue10': 'img1', 'correct_answer': 'img1'},
      {'cue1': 'img2', 'cue2': 'img3', 'cue3': 'img4', 'cue4': 'img6', 'cue5': 'img8', 'cue6': 'img7', 'cue7': 'img5', 'cue8': 'img9', 'cue9': 'img1', 'cue10': 'img4', 'correct_answer': 'img4'},
      {'cue1': 'img3', 'cue2': 'img4', 'cue3': 'img5', 'cue4': 'img7', 'cue5': 'img9', 'cue6': 'img1', 'cue7': 'img2', 'cue8': 'img6', 'cue9': 'img8', 'cue10': 'img3', 'correct_answer': 'img3'}]
    Routine Routine_1
    Routine FixCross
  LoopTerminator Loop1
  LoopInitiator Loop2 loopType="TrialHandler"
    conditionsFile = Loop2.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'cue1': 'img1', 'cue2': 'img2', 'cue3': 'img3', 'cue4': 'img4', 'cue5': 'img5', 'cue6': 'img6', 'cue7': 'img7', 'cue8': 'img8', 'cue9': 'img9', 'cue10': 'img1', 'correct_answer': 'img1'},
      {'cue1': 'img2', 'cue2': 'img3', 'cue3': 'img4', 'cue4': 'img6', 'cue5': 'img8', 'cue6': 'img7', 'cue7': 'img5', 'cue8': 'img9', 'cue9': 'img1', 'cue10': 'img4', 'correct_answer': 'img4'},
      {'cue1': 'img3', 'cue2': 'img4', 'cue3': 'img5', 'cue4': 'img7', 'cue5': 'img9', 'cue6': 'img1', 'cue7': 'img2', 'cue8': 'img6', 'cue9': 'img8', 'cue10': 'img3', 'correct_answer': 'img3'}]
    Routine Routine_2
    Routine FixCross
  LoopTerminator Loop2
  LoopInitiator Loop3 loopType="TrialHandler"
    conditionsFile = Loop3.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
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    Routine Routine_3
    Routine FixCross
  LoopTerminator Loop3
  LoopInitiator Loop4 loopType="TrialHandler"
    conditionsFile = Loop4.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
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    Routine Routine_4
    Routine FixCross
  LoopTerminator Loop4
  Routine end
